<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <gadget>
      <name>CMRT</name>
      <dll>pingvin_hyper</dll>
      <classname>CMRTGadget</classname>
      <property><name>projections_per_recon</name><value>128</value></property>
      <property><name>golden_ratio</name><value>true</value></property>
    </gadget>

    <gadget>
      <name>Extract</name>
      <dll>pingvin_mricore</dll>
      <classname>ExtractGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
