<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <gadget>
        <name>RemoveROOversampling</name>
        <dll>pingvin_mricore</dll>
        <classname>RemoveROOversamplingGadget</classname>
    </gadget>

    <gadget>
        <name>AccTrig</name>
        <dll>pingvin_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property>
            <name>trigger_dimension</name>
            <value>repetition</value>
        </property>
        <property>
          <name>sorting_dimension</name>
          <value>slice</value>
        </property>
    </gadget>

    <gadget>
        <name>Buff</name>
        <dll>pingvin_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property>
            <name>N_dimension</name>
            <value></value>
        </property>
        <property>
          <name>S_dimension</name>
          <value></value>
        </property>
        <property>
          <name>split_slices</name>
          <value>true</value>
        </property>
    </gadget>

     <gadget>
      <name>SimpleRecon</name>
      <dll>pingvin_mricore</dll>
      <classname>SimpleReconGadget</classname>
     </gadget>

    <gadget>
        <name>PythonImageArray</name>
        <dll>pingvin_python</dll>
        <classname>PythonGadget</classname>
        <property><name>python_module</name><value>image_array_recon</value></property>
        <property><name>python_class</name><value>ImageArrayRecon</value></property>
    </gadget>

    <gadget>
      <name>Extract</name>
      <dll>pingvin_mricore</dll>
      <classname>ExtractGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>