<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <gadget>
      <name>RemoveOversamplingPython</name>
      <dll>pingvin_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_path</name>                  <value>/home/myuser/scripts/python</value></property>
      <property><name>python_module</name>                <value>remove_2x_oversampling</value></property>
      <property><name>python_class</name>                <value>Remove2xOversampling</value></property>
    </gadget>

    <gadget>
      <name>AccReconPython</name>
      <dll>pingvin_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_path</name>                  <value>/home/myuser/scripts/python</value></property>
      <property><name>python_module</name>                <value>accumulate_and_recon</value></property>
      <property><name>python_class</name>                <value>AccumulateAndRecon</value></property>
    </gadget>

    <gadget>
      <name>CoilCombinePython</name>
      <dll>pingvin_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_path</name>                  <value>/home/myuser/scripts/python</value></property>
      <property><name>python_module</name>                <value>rms_coil_combine</value></property>
      <property><name>python_class</name>                <value>RMSCoilCombine</value></property>
    </gadget>

     <gadget>
      <name>Extract</name>
      <dll>pingvin_mricore</dll>
      <classname>ExtractGadget</classname>
     </gadget>

     <gadget>
      <name>Autoscale</name>
      <dll>pingvin_mricore</dll>
      <classname>AutoScaleGadget</classname>
     </gadget>

     <gadget>
      <name>FloatToShort</name>
      <dll>pingvin_mricore</dll>
      <classname>FloatToUShortGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
